CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:55
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "mask") (file does contain "Emerald")
    Name to assign these images:RawER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Autodot")
    Name to assign these images:RawLD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['']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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['']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
    Select the input image:Mask
    Name the output image:Mask_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertImageToObjects:[module_num:6|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notes:['']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
    Select the input image:Mask
    Name the output object:Mask
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

EnhanceOrSuppressFeatures:[module_num:7|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notes:['']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
    Select the input image:RawER
    Name the output image:EnhancedNucleusHoles
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:50,250
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
MeasureObjectSizeShape:[module_num:8|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notes:['']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
    Select object sets to measure:Mask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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notes:['']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
    Select the objects to filter:Mask
    Name the output objects:Mask_ArtifactRemoved
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:12000
    Filter using a maximum measurement value?:No
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
Threshold:[module_num:10|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notes:['']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
    Select the input image:EnhancedNucleusHoles
    Name the output image:EnhancedNucleusHoles_Mask
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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notes:['']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
    Select the input image:EnhancedNucleusHoles_Mask
    Name the primary objects to be identified:toFindNuclei
    Typical diameter of objects, in pixel units (Min,Max):80,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.01
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
MeasureObjectSizeShape:[module_num:12|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notes:['']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
    Select object sets to measure:toFindNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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notes:['']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
    Select the objects to filter:toFindNuclei
    Name the output objects:toFindNuclei_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
DilateObjects:[module_num:14|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notes:['']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
    Select the input object:toFindNuclei_Filtered
    Name the output object:Nuclei
    Structuring element:disk,3

ConvertObjectsToImage:[module_num:15|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notes:['']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
    Select the input objects:Nuclei
    Name the output image:Nuclei
    Select the color format:Grayscale
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
SaveImages:[module_num:16|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NucleiMasks
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|QCImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:17|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notes:['']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
    Input:RawER
    Name the output image:OverlayObjects
    Objects:Nuclei
    Opacity:0.3

IdentifySecondaryObjects:[module_num:18|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBordersWithCP
    Select the method to identify the secondary objects:Propagation
    Select the input image:RawER
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:Yes
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
MaskObjects:[module_num:19|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notes:['']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
    Select objects to be masked:Mask_ArtifactRemoved
    Name the masked objects:CellAll
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellBordersWithCP
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

Align:[module_num:20|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

RelateObjects:[module_num:21|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notes:['']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
    Parent objects:Nuclei
    Child objects:CellAll
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:22|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notes:['']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
    Select the input objects:CellAll
    Name the new objects:CellNoNuclei
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Nuclei
    Output object type:Disconnected

FilterObjects:[module_num:23|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notes:['']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
    Select the objects to filter:CellNoNuclei
    Name the output objects:Cell
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:RemovedCells
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
ConvertObjectsToImage:[module_num:24|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notes:['']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
    Select the input objects:CellAll
    Name the output image:CellAll
    Select the color format:Grayscale
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
SaveImages:[module_num:25|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:CellAll
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellsIncludingTouchingBorders
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|QCImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:26|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notes:['']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
    Select the input objects:Cell
    Name the output image:Cell
    Select the color format:Grayscale
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
SaveImages:[module_num:27|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Cell
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellMasks
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|QCImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:28|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

OverlayOutlines:[module_num:29|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawER
    Name the output image:overlayCellPose
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:Mask

OverlayOutlines:[module_num:30|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawER
    Name the output image:OverlayCP
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:Cell
    Select outline color:red
    Select objects to display:Nuclei

OverlayObjects:[module_num:31|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notes:['']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
    Input:RawER
    Name the output image:OverlayCellPose
    Objects:Mask
    Opacity:0.3

OverlayObjects:[module_num:32|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notes:['']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
    Input:RawER
    Name the output image:OverlayCP
    Objects:Cell
    Opacity:0.3

Align:[module_num:33|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifyTertiaryObjects:[module_num:34|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notes:['']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
    Select the larger identified objects:Cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ConvertObjectsToImage:[module_num:35|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notes:['']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
    Select the input objects:Cytoplasm
    Name the output image:Cytoplasm
    Select the color format:Grayscale
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
SaveImages:[module_num:36|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:Cytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CytoplasmMask
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|QCImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MaskImage:[module_num:37|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notes:['']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
    Select the input image:RawER
    Name the output image:CytoplasmMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:38|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notes:['']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enabled:False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
    Select images to measure:RawER, RawLD
    Select objects to measure:Cytoplasm, Nuclei

MeasureObjectSizeShape:[module_num:39|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notes:['']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enabled:False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
    Select object sets to measure:Cell, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

Align:[module_num:40|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notes:['']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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

IdentifyPrimaryObjects:[module_num:41|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
    Select the input image:RawLD
    Name the primary objects to be identified:LipidDroplets
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Size of adaptive window:200
    Lower outlier fraction:0.10
    Upper outlier fraction:0.01
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

RelateObjects:[module_num:42|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
    Parent objects:Cell
    Child objects:LipidDroplets
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateLipidDroplets
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
MeasureObjectSizeShape:[module_num:43|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
    Select object sets to measure:Cell, Cytoplasm, Nuclei, RelateLipidDroplets
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:44|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
    Select images to measure:RawER, RawLD
    Select objects to measure:Cell, Cytoplasm, Nuclei, RelateLipidDroplets

RelateObjects:[module_num:45|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
    Parent objects:Cell
    Child objects:RelateLipidDroplets
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:46|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawLD
    Name the output image:OverlayCellsLDs
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FE15F1
    Select objects to display:Cell
    Select outline color:#280BFF
    Select objects to display:Nuclei
    Select outline color:#00FF00
    Select objects to display:RelateLipidDroplets

OverlayOutlines:[module_num:47|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawER
    Name the output image:OverlayCells
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FE15F1
    Select objects to display:Cell
    Select outline color:#280BFF
    Select objects to display:Nuclei

OverlayOutlines:[module_num:48|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawER
    Name the output image:OverlayCellBorders
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FE15F1
    Select objects to display:Cell

OverlayOutlines:[module_num:49|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawER
    Name the output image:OverlayNuclei
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#1B00FC
    Select objects to display:Nuclei

SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:OverlayCellBorders
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawLD
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayCelBorders
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|QCImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:OverlayCellsLDs
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawLD
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayCellsLD
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|QCImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:OverlayCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayCells
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|QCImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:OverlayNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayNuclei
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|QCImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

Align:[module_num:54|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enabled:False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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
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    Name the first output image:AlignedRed
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    Name the second output image:AlignedGreen

ExportToSpreadsheet:[module_num:55|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notes:['']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|CellProfilerResults
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cell|AreaShape_Area,Cell|AreaShape_Perimeter,Cell|Mean_RelateLipidDroplets_Number_Object_Number,Cell|Mean_RelateLipidDroplets_AreaShape_MaximumRadius,Cell|Mean_RelateLipidDroplets_AreaShape_Zernike_7_3,Cell|Mean_RelateLipidDroplets_AreaShape_Zernike_7_1,Cell|Mean_RelateLipidDroplets_AreaShape_Zernike_7_5,Cell|Mean_RelateLipidDroplets_AreaShape_Zernike_7_7,Cell|Mean_RelateLipidDroplets_AreaShape_Zernike_5_3,Cell|Mean_RelateLipidDroplets_AreaShape_Zernike_5_1,Cell|Mean_RelateLipidDroplets_AreaShape_Zernike_5_5,Cell|Mean_RelateLipidDroplets_AreaShape_Zernike_8_2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurement_
    Overwrite existing files without warning?:No
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